<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>1920</vid:Width>
              <vid:Height>1080</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>30</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>400</cv:X>
            <cv:Y>75</cv:Y>
            <cv:Width>1000</cv:Width>
            <cv:Height>875</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>Chow test\20260423_drd1_vpchr2_M276_post.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>320</cv:Width>
            <cv:Height>240</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Crop">
            <cv:RegionOfInterest>
              <cv:X>400</cv:X>
              <cv:Y>75</cv:Y>
              <cv:Width>1000</cv:Width>
              <cv:Height>875</cv:Height>
            </cv:RegionOfInterest>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>158</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>21</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>50</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="GreaterThanOrEqual">
        <Operand xsi:type="FloatProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM6</ard:PortName>
          <ard:Pin>11</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Item1 as TotalSeconds,
Item2 as ElapsedSeconds,
Item3 as X,
Item4 as Y,
Item5 as DigitalOut)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Chow test\20260423_drd1_vpchr2_M276_post.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="19" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="19" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="15" To="19" Label="Source3" />
      <Edge From="16" To="19" Label="Source4" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source5" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>